PsychoPy2experiment version="3.0.2"
Settings
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = interleaved_QUEST_staircase_contrast
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Routines
  Routine thanks
    TextComponent thanksMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = You're done! You can contact the researcher outside the room. You are free to have a break!
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  Routine trial
    CodeComponent setSide
      Code Type = Py
      Begin Routine:
        if random()>0.5:
            ori = 0  #this is orientation of the grating
            correctAns = ['left','right']
        else:
            ori = 90
            correctAns = ['up','down']
      End Routine:
        trials.addOtherData('side',correctAns)
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
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    GratingComponent fixation
      color = black
      mask = gauss
      sf = None
      size = 1
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.6
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    GratingComponent grating
      color [set every repeat] = $level
      durationEstim = 2
      mask = gauss
      ori [set every repeat] = ori
      sf [set every repeat] = SF
      size [set every repeat] = stim_diam_degs
      startVal [time (s)] = 1
      tex = sin
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    KeyboardComponent resp
      allowedKeys = 'left','right','up','down'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine feedback
  Routine instructions_2
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good job!

        Press RIGHT or LEFT button if you see horizontal movement.
        Press UP or DOWN button if you see vertical movement.
        If you don't see anything then guess!

        Next there will be no feedback. Press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instrText
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        You will see black and white stripes move horizontally or vertically. Press the left or right buttons if you see the grating is horizontally moving, up or down button if you see the grating is vertically moving.

        If you don't see anything then guess!


        You will have several pratice trials. Press any key to continue
    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine trial
    Routine feedback
  LoopTerminator trials_2
  Routine instructions_2
  LoopInitiator trials loopType="MultiStairHandler"
    conditionsFile = stairDefinitions.xlsx
    loopType = interleaved staircases
    nReps = 40
    stairType = QUEST
    switchMethod = random
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    conditions:
      [{'startVal': 0.001, 'sf': 2, 'label': 'low_2'},
      {'startVal': 0.1, 'sf': 2, 'label': 'high_2'},
      {'startVal': 0.001, 'sf': 8, 'label': 'low_8'},
      {'startVal': 0.1, 'sf': 8, 'label': 'high_8'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
