PsychoPy2experiment version="3.2.4"
Settings
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '001', 'sex': 'F'}
  Full-screen window = True
  Monitor = rog_samsung
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = contrast_sensitivity_abramov
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Routines
  Routine thanks
    TextComponent thanksMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = You're done! You can contact the researcher outside the room. You are free to have a break!
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  Routine feedback
  Routine instructions_before_threshold_estimation
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good job!

        Remember, press the RIGHT or LEFT arrow button if you see a horizontal grating.
        Press the UP or DOWN arrow button if you see a vertical grating.
        If you don't see anything then guess!

        Unlike the practice trials, you will not receive feedback. Good luck and have fun.

        Press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_before_practice
    TextComponent instrText
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        You will see black and white stripes oriented either horizontally or vertically.

        Press the LEFT or RIGHT arrow button if you see a horizontal grating.

        Push the UP or DOWN arrow button if you see a vertical grating.

        If you don't see anything, then guess!

        You will have several pratice trials.

        Press any key to continue
    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
    TextComponent setup_text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        1. Measure and confirm viewing distance

        2. Confirm participant is seated comfortably and can press keys

        Hit any key to continue to participant instructions screen.
    KeyboardComponent end_setup
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_trial
    CodeComponent setSide
      Code Type = Py
      Begin Routine:
        if random()>0.5:
            ori = 0  #this is orientation of the grating
            correctAns = ['left','right']
        else:
            ori = 90
            correctAns = ['up','down']
      End Routine:
        trials.addOtherData('side',correctAns)
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
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    GratingComponent fixation
      color = black
      mask = gauss
      sf = None
      size = 1
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.6
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    GratingComponent grating
      color = 'white'
      durationEstim = 2
      mask = gauss
      ori [set every repeat] = ori
      sf [set every repeat] = SF
      size = 60
      startVal [time (s)] = 1
      tex = sin
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    KeyboardComponent resp
      allowedKeys = 'left','right','up','down'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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Flow
  Routine setup
  Routine instructions_before_practice
  LoopInitiator practice_trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine practice_trial
    Routine feedback
  LoopTerminator practice_trials
  Routine instructions_before_threshold_estimation
  LoopInitiator theshold_estimation_trials loopType="MultiStairHandler"
    conditionsFile = stairDefinitions.xlsx
    loopType = interleaved staircases
    nReps = 40
    stairType = QUEST
    switchMethod = random
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    conditions:
      [{'startVal': 0.001, 'sf': 2, 'label': 'low_2'},
      {'startVal': 0.1, 'sf': 2, 'label': 'high_2'},
      {'startVal': 0.001, 'sf': 8, 'label': 'low_8'},
      {'startVal': 0.1, 'sf': 8, 'label': 'high_8'}]
    Routine practice_trial
  LoopTerminator theshold_estimation_trials
  Routine thanks
